####################################################################################
# Generic 10x10 fully connected ceRNA network.
# Intended for random sampling of the parameter space of such systems.
# 
# 
###################################################################################


begin model

begin parameters
	# miRNA transcription rates
	kS1			0.02
	kS2			0.02
	kS3			0.02
	kS4			0.02
	kS5			0.02
	kS6			0.02
	kS7			0.02
	kS8			0.02
	kS9			0.02
	kS10		0.02
	
	# ceRNA transcription rates
	kR1			0.15		
	kR2			0.15
	kR3			0.15
	kR4			0.15
	kR5			0.15
	kR6			0.15
	kR7			0.15
	kR8			0.15
	kR9			0.15
	kR10		0.15
	
	# ceRNA degradation rates
	gR1			0.0004
	gR2			0.0004
	gR3			0.0004
	gR4			0.0004
	gR5			0.0004
	gR6			0.0004
	gR7			0.0004
	gR8			0.0004
	gR9			0.0004
	gR10		0.0004
	
	# miRNA degradation rates
	gS1			0.0002
	gS2			0.0002
	gS3			0.0002
	gS4			0.0002
	gS5			0.0002
	gS6			0.0002
	gS7			0.0002
	gS8			0.0002
	gS9			0.0002
	gS10		0.0002
	
	# association/dissociation rates
	kf1			0.001200
	kb1			0.000010
	kf2			0.001200
	kb2			0.000010
	kf3			0.001200
	kb3			0.000010
	kf4			0.001200
	kb4			0.000010
	kf5			0.001200
	kb5			0.000010
	kf6			0.001200
	kb6			0.000010
	kf7			0.001200
	kb7			0.000010
	kf8			0.001200
	kb8			0.000010
	kf9			0.001200
	kb9			0.000010
	kf10			0.001200
	kb10			0.000010
	kf11			0.001200
	kb11			0.000010
	kf12			0.001200
	kb12			0.000010
	kf13			0.001200
	kb13			0.000010
	kf14			0.001200
	kb14			0.000010
	kf15			0.001200
	kb15			0.000010
	kf16			0.001200
	kb16			0.000010
	kf17			0.001200
	kb17			0.000010
	kf18			0.001200
	kb18			0.000010
	kf19			0.001200
	kb19			0.000010
	kf20			0.001200
	kb20			0.000010
	kf21			0.001200
	kb21			0.000010
	kf22			0.001200
	kb22			0.000010
	kf23			0.001200
	kb23			0.000010
	kf24			0.001200
	kb24			0.000010
	kf25			0.001200
	kb25			0.000010
	kf26			0.001200
	kb26			0.000010
	kf27			0.001200
	kb27			0.000010
	kf28			0.001200
	kb28			0.000010
	kf29			0.001200
	kb29			0.000010
	kf30			0.001200
	kb30			0.000010
	kf31			0.001200
	kb31			0.000010
	kf32			0.001200
	kb32			0.000010
	kf33			0.001200
	kb33			0.000010
	kf34			0.001200
	kb34			0.000010
	kf35			0.001200
	kb35			0.000010
	kf36			0.001200
	kb36			0.000010
	kf37			0.001200
	kb37			0.000010
	kf38			0.001200
	kb38			0.000010
	kf39			0.001200
	kb39			0.000010
	kf40			0.001200
	kb40			0.000010
	kf41			0.001200
	kb41			0.000010
	kf42			0.001200
	kb42			0.000010
	kf43			0.001200
	kb43			0.000010
	kf44			0.001200
	kb44			0.000010
	kf45			0.001200
	kb45			0.000010
	kf46			0.001200
	kb46			0.000010
	kf47			0.001200
	kb47			0.000010
	kf48			0.001200
	kb48			0.000010
	kf49			0.001200
	kb49			0.000010
	kf50			0.001200
	kb50			0.000010
	kf51			0.001200
	kb51			0.000010
	kf52			0.001200
	kb52			0.000010
	kf53			0.001200
	kb53			0.000010
	kf54			0.001200
	kb54			0.000010
	kf55			0.001200
	kb55			0.000010
	kf56			0.001200
	kb56			0.000010
	kf57			0.001200
	kb57			0.000010
	kf58			0.001200
	kb58			0.000010
	kf59			0.001200
	kb59			0.000010
	kf60			0.001200
	kb60			0.000010
	kf61			0.001200
	kb61			0.000010
	kf62			0.001200
	kb62			0.000010
	kf63			0.001200
	kb63			0.000010
	kf64			0.001200
	kb64			0.000010
	kf65			0.001200
	kb65			0.000010
	kf66			0.001200
	kb66			0.000010
	kf67			0.001200
	kb67			0.000010
	kf68			0.001200
	kb68			0.000010
	kf69			0.001200
	kb69			0.000010
	kf70			0.001200
	kb70			0.000010
	kf71			0.001200
	kb71			0.000010
	kf72			0.001200
	kb72			0.000010
	kf73			0.001200
	kb73			0.000010
	kf74			0.001200
	kb74			0.000010
	kf75			0.001200
	kb75			0.000010
	kf76			0.001200
	kb76			0.000010
	kf77			0.001200
	kb77			0.000010
	kf78			0.001200
	kb78			0.000010
	kf79			0.001200
	kb79			0.000010
	kf80			0.001200
	kb80			0.000010
	kf81			0.001200
	kb81			0.000010
	kf82			0.001200
	kb82			0.000010
	kf83			0.001200
	kb83			0.000010
	kf84			0.001200
	kb84			0.000010
	kf85			0.001200
	kb85			0.000010
	kf86			0.001200
	kb86			0.000010
	kf87			0.001200
	kb87			0.000010
	kf88			0.001200
	kb88			0.000010
	kf89			0.001200
	kb89			0.000010
	kf90			0.001200
	kb90			0.000010
	kf91			0.001200
	kb91			0.000010
	kf92			0.001200
	kb92			0.000010
	kf93			0.001200
	kb93			0.000010
	kf94			0.001200
	kb94			0.000010
	kf95			0.001200
	kb95			0.000010
	kf96			0.001200
	kb96			0.000010
	kf97			0.001200
	kb97			0.000010
	kf98			0.001200
	kb98			0.000010
	kf99			0.001200
	kb99			0.000010
	kf100			0.001200
	kb100			0.000010
	
	# Other parameters
	a			0.5			# miRNA catalyticity level
	#g			0.00001		# base complex degradation rate
	#gCf			g*a			# full complex degradation rate
	#gCp			(1-a)*g		# partial complex degradation
	g1			0.000010
	g2			0.000010
	g3			0.000010
	g4			0.000010
	g5			0.000010
	g6			0.000010
	g7			0.000010
	g8			0.000010
	g9			0.000010
	g10			0.000010
	g11			0.000010
	g12			0.000010
	g13			0.000010
	g14			0.000010
	g15			0.000010
	g16			0.000010
	g17			0.000010
	g18			0.000010
	g19			0.000010
	g20			0.000010
	g21			0.000010
	g22			0.000010
	g23			0.000010
	g24			0.000010
	g25			0.000010
	g26			0.000010
	g27			0.000010
	g28			0.000010
	g29			0.000010
	g30			0.000010
	g31			0.000010
	g32			0.000010
	g33			0.000010
	g34			0.000010
	g35			0.000010
	g36			0.000010
	g37			0.000010
	g38			0.000010
	g39			0.000010
	g40			0.000010
	g41			0.000010
	g42			0.000010
	g43			0.000010
	g44			0.000010
	g45			0.000010
	g46			0.000010
	g47			0.000010
	g48			0.000010
	g49			0.000010
	g50			0.000010
	g51			0.000010
	g52			0.000010
	g53			0.000010
	g54			0.000010
	g55			0.000010
	g56			0.000010
	g57			0.000010
	g58			0.000010
	g59			0.000010
	g60			0.000010
	g61			0.000010
	g62			0.000010
	g63			0.000010
	g64			0.000010
	g65			0.000010
	g66			0.000010
	g67			0.000010
	g68			0.000010
	g69			0.000010
	g70			0.000010
	g71			0.000010
	g72			0.000010
	g73			0.000010
	g74			0.000010
	g75			0.000010
	g76			0.000010
	g77			0.000010
	g78			0.000010
	g79			0.000010
	g80			0.000010
	g81			0.000010
	g82			0.000010
	g83			0.000010
	g84			0.000010
	g85			0.000010
	g86			0.000010
	g87			0.000010
	g88			0.000010
	g89			0.000010
	g90			0.000010
	g91			0.000010
	g92			0.000010
	g93			0.000010
	g94			0.000010
	g95			0.000010
	g96			0.000010
	g97			0.000010
	g98			0.000010
	g99			0.000010
	g100		0.000010
	
end parameters

begin molecule types
	# miRNAs
	miRNA1(c)
	miRNA2(c)
	miRNA3(c)
	miRNA4(c)
	miRNA5(c)
	miRNA6(c)
	miRNA7(c)
	miRNA8(c)
	miRNA9(c)
	miRNA10(c)
	
	# ceRNAs
	ceRNA1(m)
	ceRNA2(m)
	ceRNA3(m)
	ceRNA4(m)
	ceRNA5(m)
	ceRNA6(m)
	ceRNA7(m)
	ceRNA8(m)
	ceRNA9(m)
	ceRNA10(m)
end molecule types

begin seed species
	# miRNAs
	miRNA1(c)	0
	miRNA2(c)	0
	miRNA3(c)	0	
	miRNA4(c)	0
	miRNA5(c)	0
	miRNA6(c)	0
	miRNA7(c)	0
	miRNA8(c)	0
	miRNA9(c)	0
	miRNA10(c)	0
	
	# ceRNAs
	ceRNA1(m)	0
	ceRNA2(m)	0
	ceRNA3(m)	0
	ceRNA4(m)	0
	ceRNA5(m)	0
	ceRNA6(m)	0
	ceRNA7(m)	0
	ceRNA8(m)	0
	ceRNA9(m)	0
	ceRNA10(m)	0
end seed species

begin observables 
	# miRNAs
	Molecules miRNA1_free	miRNA1(c)
	Molecules miRNA2_free	miRNA2(c)
	Molecules miRNA3_free	miRNA3(c)
	Molecules miRNA4_free	miRNA4(c)
	Molecules miRNA5_free	miRNA5(c)
	Molecules miRNA6_free	miRNA6(c)
	Molecules miRNA7_free	miRNA7(c)
	Molecules miRNA8_free	miRNA8(c)
	Molecules miRNA9_free	miRNA9(c)
	Molecules miRNA10_free	miRNA10(c)
	
	# ceRNAs
	Molecules ceRNA1_free	ceRNA1(m)
	Molecules ceRNA2_free	ceRNA2(m)
	Molecules ceRNA3_free	ceRNA3(m)
	Molecules ceRNA4_free	ceRNA4(m)
	Molecules ceRNA5_free	ceRNA5(m)
	Molecules ceRNA6_free	ceRNA6(m)
	Molecules ceRNA7_free	ceRNA7(m)
	Molecules ceRNA8_free	ceRNA8(m)
	Molecules ceRNA9_free	ceRNA9(m)
	Molecules ceRNA10_free	ceRNA10(m)
	
	# complexes
	#Molecules Complex1		miRNA1(c!1).ceRNA1(m!1)
	#Molecules Complex2 		miRNA(c!1).ceRNA2(m!1)
end observables

begin reaction rules
	#### Transcription rules ####
	# miRNA transcription
	0 -> miRNA1(c) kS1
	0 -> miRNA2(c) kS2
	0 -> miRNA3(c) kS3
	0 -> miRNA4(c) kS4
	0 -> miRNA5(c) kS5
	0 -> miRNA6(c) kS6
	0 -> miRNA7(c) kS7
	0 -> miRNA8(c) kS8
	0 -> miRNA9(c) kS9
	0 -> miRNA10(c) kS10
	
	# ceRNA transcription
	0 -> ceRNA1(m) kR1
	0 -> ceRNA2(m) kR2
	0 -> ceRNA3(m) kR3
	0 -> ceRNA4(m) kR4
	0 -> ceRNA5(m) kR5
	0 -> ceRNA6(m) kR6
	0 -> ceRNA7(m) kR7
	0 -> ceRNA8(m) kR8
	0 -> ceRNA9(m) kR9
	0 -> ceRNA10(m) kR10
	
	#### Degradation rules ####
	# miRNA degradation
	miRNA1(c) -> 0 gS1
	miRNA2(c) -> 0 gS2
	miRNA3(c) -> 0 gS3
	miRNA4(c) -> 0 gS4
	miRNA5(c) -> 0 gS5
	miRNA6(c) -> 0 gS6
	miRNA7(c) -> 0 gS7
	miRNA8(c) -> 0 gS8
	miRNA9(c) -> 0 gS9
	miRNA10(c) -> 0 gS10
	
	# ceRNA degradation
	ceRNA1(m) -> 0 gR1
	ceRNA2(m) -> 0 gR2
	ceRNA3(m) -> 0 gR3
	ceRNA4(m) -> 0 gR4
	ceRNA5(m) -> 0 gR5
	ceRNA6(m) -> 0 gR6
	ceRNA7(m) -> 0 gR7
	ceRNA8(m) -> 0 gR8
	ceRNA9(m) -> 0 gR9
	ceRNA10(m) -> 0 gR10
	
	#### Complex formation rules ####
	# miRNA1 binding rules
	miRNA1(c) + ceRNA1(m) <-> miRNA1(c!1).ceRNA1(m!1) kf1, kb1
	miRNA1(c) + ceRNA2(m) <-> miRNA1(c!1).ceRNA2(m!1) kf2, kb2
	miRNA1(c) + ceRNA3(m) <-> miRNA1(c!1).ceRNA3(m!1) kf3, kb3
	miRNA1(c) + ceRNA4(m) <-> miRNA1(c!1).ceRNA4(m!1) kf4, kb4
	miRNA1(c) + ceRNA5(m) <-> miRNA1(c!1).ceRNA5(m!1) kf5, kb5
	miRNA1(c) + ceRNA6(m) <-> miRNA1(c!1).ceRNA6(m!1) kf6, kb6
	miRNA1(c) + ceRNA7(m) <-> miRNA1(c!1).ceRNA7(m!1) kf7, kb7
	miRNA1(c) + ceRNA8(m) <-> miRNA1(c!1).ceRNA8(m!1) kf8, kb8
	miRNA1(c) + ceRNA9(m) <-> miRNA1(c!1).ceRNA9(m!1) kf9, kb9
	miRNA1(c) + ceRNA10(m) <-> miRNA1(c!1).ceRNA10(m!1) kf10, kb10
	
	# miRNA2 binding rules
	miRNA2(c) + ceRNA1(m) <-> miRNA2(c!1).ceRNA1(m!1) kf11, kb11
	miRNA2(c) + ceRNA2(m) <-> miRNA2(c!1).ceRNA2(m!1) kf12, kb12
	miRNA2(c) + ceRNA3(m) <-> miRNA2(c!1).ceRNA3(m!1) kf13, kb13
	miRNA2(c) + ceRNA4(m) <-> miRNA2(c!1).ceRNA4(m!1) kf14, kb14
	miRNA2(c) + ceRNA5(m) <-> miRNA2(c!1).ceRNA5(m!1) kf15, kb15
	miRNA2(c) + ceRNA6(m) <-> miRNA2(c!1).ceRNA6(m!1) kf16, kb16
	miRNA2(c) + ceRNA7(m) <-> miRNA2(c!1).ceRNA7(m!1) kf17, kb17
	miRNA2(c) + ceRNA8(m) <-> miRNA2(c!1).ceRNA8(m!1) kf18, kb18
	miRNA2(c) + ceRNA9(m) <-> miRNA2(c!1).ceRNA9(m!1) kf19, kb19
	miRNA2(c) + ceRNA10(m) <-> miRNA2(c!1).ceRNA10(m!1) kf20, kb20
	
	# miRNA3 binding rules
	miRNA3(c) + ceRNA1(m) <-> miRNA3(c!1).ceRNA1(m!1) kf21, kb21
	miRNA3(c) + ceRNA2(m) <-> miRNA3(c!1).ceRNA2(m!1) kf22, kb22
	miRNA3(c) + ceRNA3(m) <-> miRNA3(c!1).ceRNA3(m!1) kf23, kb23
	miRNA3(c) + ceRNA4(m) <-> miRNA3(c!1).ceRNA4(m!1) kf24, kb24
	miRNA3(c) + ceRNA5(m) <-> miRNA3(c!1).ceRNA5(m!1) kf25, kb25
	miRNA3(c) + ceRNA6(m) <-> miRNA3(c!1).ceRNA6(m!1) kf26, kb26
	miRNA3(c) + ceRNA7(m) <-> miRNA3(c!1).ceRNA7(m!1) kf27, kb27
	miRNA3(c) + ceRNA8(m) <-> miRNA3(c!1).ceRNA8(m!1) kf28, kb28
	miRNA3(c) + ceRNA9(m) <-> miRNA3(c!1).ceRNA9(m!1) kf29, kb29
	miRNA3(c) + ceRNA10(m) <-> miRNA3(c!1).ceRNA10(m!1) kf30, kb30
	
	# miRNA4 binding rules
	miRNA4(c) + ceRNA1(m) <-> miRNA4(c!1).ceRNA1(m!1) kf31, kb31
	miRNA4(c) + ceRNA2(m) <-> miRNA4(c!1).ceRNA2(m!1) kf32, kb32
	miRNA4(c) + ceRNA3(m) <-> miRNA4(c!1).ceRNA3(m!1) kf33, kb33
	miRNA4(c) + ceRNA4(m) <-> miRNA4(c!1).ceRNA4(m!1) kf34, kb34
	miRNA4(c) + ceRNA5(m) <-> miRNA4(c!1).ceRNA5(m!1) kf35, kb35
	miRNA4(c) + ceRNA6(m) <-> miRNA4(c!1).ceRNA6(m!1) kf36, kb36
	miRNA4(c) + ceRNA7(m) <-> miRNA4(c!1).ceRNA7(m!1) kf37, kb37
	miRNA4(c) + ceRNA8(m) <-> miRNA4(c!1).ceRNA8(m!1) kf38, kb38
	miRNA4(c) + ceRNA9(m) <-> miRNA4(c!1).ceRNA9(m!1) kf39, kb39
	miRNA4(c) + ceRNA10(m) <-> miRNA4(c!1).ceRNA10(m!1) kf40, kb40
	
	# miRNA5 binding rules
	miRNA5(c) + ceRNA1(m) <-> miRNA5(c!1).ceRNA1(m!1) kf41, kb41
	miRNA5(c) + ceRNA2(m) <-> miRNA5(c!1).ceRNA2(m!1) kf42, kb42
	miRNA5(c) + ceRNA3(m) <-> miRNA5(c!1).ceRNA3(m!1) kf43, kb43
	miRNA5(c) + ceRNA4(m) <-> miRNA5(c!1).ceRNA4(m!1) kf44, kb44
	miRNA5(c) + ceRNA5(m) <-> miRNA5(c!1).ceRNA5(m!1) kf45, kb45
	miRNA5(c) + ceRNA6(m) <-> miRNA5(c!1).ceRNA6(m!1) kf46, kb46
	miRNA5(c) + ceRNA7(m) <-> miRNA5(c!1).ceRNA7(m!1) kf47, kb47
	miRNA5(c) + ceRNA8(m) <-> miRNA5(c!1).ceRNA8(m!1) kf48, kb48
	miRNA5(c) + ceRNA9(m) <-> miRNA5(c!1).ceRNA9(m!1) kf49, kb49
	miRNA5(c) + ceRNA10(m) <-> miRNA5(c!1).ceRNA10(m!1) kf50, kb50
	
	# miRNA6 binding rules
	miRNA6(c) + ceRNA1(m) <-> miRNA6(c!1).ceRNA1(m!1) kf51, kb51
	miRNA6(c) + ceRNA2(m) <-> miRNA6(c!1).ceRNA2(m!1) kf52, kb52
	miRNA6(c) + ceRNA3(m) <-> miRNA6(c!1).ceRNA3(m!1) kf53, kb53
	miRNA6(c) + ceRNA4(m) <-> miRNA6(c!1).ceRNA4(m!1) kf54, kb54
	miRNA6(c) + ceRNA5(m) <-> miRNA6(c!1).ceRNA5(m!1) kf55, kb55
	miRNA6(c) + ceRNA6(m) <-> miRNA6(c!1).ceRNA6(m!1) kf56, kb56
	miRNA6(c) + ceRNA7(m) <-> miRNA6(c!1).ceRNA7(m!1) kf57, kb57
	miRNA6(c) + ceRNA8(m) <-> miRNA6(c!1).ceRNA8(m!1) kf58, kb58
	miRNA6(c) + ceRNA9(m) <-> miRNA6(c!1).ceRNA9(m!1) kf59, kb59
	miRNA6(c) + ceRNA10(m) <-> miRNA6(c!1).ceRNA10(m!1) kf60, kb60
	
	# miRNA7 binding rules
	miRNA7(c) + ceRNA1(m) <-> miRNA7(c!1).ceRNA1(m!1) kf61, kb61
	miRNA7(c) + ceRNA2(m) <-> miRNA7(c!1).ceRNA2(m!1) kf62, kb62
	miRNA7(c) + ceRNA3(m) <-> miRNA7(c!1).ceRNA3(m!1) kf63, kb63
	miRNA7(c) + ceRNA4(m) <-> miRNA7(c!1).ceRNA4(m!1) kf64, kb64
	miRNA7(c) + ceRNA5(m) <-> miRNA7(c!1).ceRNA5(m!1) kf65, kb65
	miRNA7(c) + ceRNA6(m) <-> miRNA7(c!1).ceRNA6(m!1) kf66, kb66
	miRNA7(c) + ceRNA7(m) <-> miRNA7(c!1).ceRNA7(m!1) kf67, kb67
	miRNA7(c) + ceRNA8(m) <-> miRNA7(c!1).ceRNA8(m!1) kf68, kb68
	miRNA7(c) + ceRNA9(m) <-> miRNA7(c!1).ceRNA9(m!1) kf69, kb69
	miRNA7(c) + ceRNA10(m) <-> miRNA7(c!1).ceRNA10(m!1) kf70, kb70
	
	# miRNA8 binding rules
	miRNA8(c) + ceRNA1(m) <-> miRNA8(c!1).ceRNA1(m!1) kf71, kb71
	miRNA8(c) + ceRNA2(m) <-> miRNA8(c!1).ceRNA2(m!1) kf72, kb72
	miRNA8(c) + ceRNA3(m) <-> miRNA8(c!1).ceRNA3(m!1) kf73, kb73
	miRNA8(c) + ceRNA4(m) <-> miRNA8(c!1).ceRNA4(m!1) kf74, kb74
	miRNA8(c) + ceRNA5(m) <-> miRNA8(c!1).ceRNA5(m!1) kf75, kb75
	miRNA8(c) + ceRNA6(m) <-> miRNA8(c!1).ceRNA6(m!1) kf76, kb76
	miRNA8(c) + ceRNA7(m) <-> miRNA8(c!1).ceRNA7(m!1) kf77, kb77
	miRNA8(c) + ceRNA8(m) <-> miRNA8(c!1).ceRNA8(m!1) kf78, kb78
	miRNA8(c) + ceRNA9(m) <-> miRNA8(c!1).ceRNA9(m!1) kf79, kb79
	miRNA8(c) + ceRNA10(m) <-> miRNA8(c!1).ceRNA10(m!1) kf80, kb80
	
	# miRNA9 binding rules
	miRNA9(c) + ceRNA1(m) <-> miRNA9(c!1).ceRNA1(m!1) kf81, kb81
	miRNA9(c) + ceRNA2(m) <-> miRNA9(c!1).ceRNA2(m!1) kf82, kb82
	miRNA9(c) + ceRNA3(m) <-> miRNA9(c!1).ceRNA3(m!1) kf83, kb83
	miRNA9(c) + ceRNA4(m) <-> miRNA9(c!1).ceRNA4(m!1) kf84, kb84
	miRNA9(c) + ceRNA5(m) <-> miRNA9(c!1).ceRNA5(m!1) kf85, kb85
	miRNA9(c) + ceRNA6(m) <-> miRNA9(c!1).ceRNA6(m!1) kf86, kb86
	miRNA9(c) + ceRNA7(m) <-> miRNA9(c!1).ceRNA7(m!1) kf87, kb87
	miRNA9(c) + ceRNA8(m) <-> miRNA9(c!1).ceRNA8(m!1) kf88, kb88
	miRNA9(c) + ceRNA9(m) <-> miRNA9(c!1).ceRNA9(m!1) kf89, kb89
	miRNA9(c) + ceRNA10(m) <-> miRNA9(c!1).ceRNA10(m!1) kf90, kb90
	
	# miRNA10 binding rules
	miRNA10(c) + ceRNA1(m) <-> miRNA10(c!1).ceRNA1(m!1) kf91, kb91
	miRNA10(c) + ceRNA2(m) <-> miRNA10(c!1).ceRNA2(m!1) kf92, kb92
	miRNA10(c) + ceRNA3(m) <-> miRNA10(c!1).ceRNA3(m!1) kf93, kb93
	miRNA10(c) + ceRNA4(m) <-> miRNA10(c!1).ceRNA4(m!1) kf94, kb94
	miRNA10(c) + ceRNA5(m) <-> miRNA10(c!1).ceRNA5(m!1) kf95, kb95
	miRNA10(c) + ceRNA6(m) <-> miRNA10(c!1).ceRNA6(m!1) kf96, kb96
	miRNA10(c) + ceRNA7(m) <-> miRNA10(c!1).ceRNA7(m!1) kf97, kb97
	miRNA10(c) + ceRNA8(m) <-> miRNA10(c!1).ceRNA8(m!1) kf98, kb98
	miRNA10(c) + ceRNA9(m) <-> miRNA10(c!1).ceRNA9(m!1) kf99, kb99
	miRNA10(c) + ceRNA10(m) <-> miRNA10(c!1).ceRNA10(m!1) kf100, kb100
	
	# miRNA1 complexes, full degradation
	miRNA1(c!1).ceRNA1(m!1) -> 0 a*g1 DeleteMolecules
	miRNA1(c!1).ceRNA2(m!1) -> 0 a*g2 DeleteMolecules
	miRNA1(c!1).ceRNA3(m!1) -> 0 a*g3 DeleteMolecules
	miRNA1(c!1).ceRNA4(m!1) -> 0 a*g4 DeleteMolecules
	miRNA1(c!1).ceRNA5(m!1) -> 0 a*g5 DeleteMolecules
	miRNA1(c!1).ceRNA6(m!1) -> 0 a*g6 DeleteMolecules
	miRNA1(c!1).ceRNA7(m!1) -> 0 a*g7 DeleteMolecules
	miRNA1(c!1).ceRNA8(m!1) -> 0 a*g8 DeleteMolecules
	miRNA1(c!1).ceRNA9(m!1) -> 0 a*g9 DeleteMolecules
	miRNA1(c!1).ceRNA10(m!1) -> 0 a*g10 DeleteMolecules
	
	# miRNA2 complexes, full degradation
	miRNA2(c!1).ceRNA1(m!1) -> 0 a*g11 DeleteMolecules
	miRNA2(c!1).ceRNA2(m!1) -> 0 a*g12 DeleteMolecules
	miRNA2(c!1).ceRNA3(m!1) -> 0 a*g13 DeleteMolecules
	miRNA2(c!1).ceRNA4(m!1) -> 0 a*g14 DeleteMolecules
	miRNA2(c!1).ceRNA5(m!1) -> 0 a*g15 DeleteMolecules
	miRNA2(c!1).ceRNA6(m!1) -> 0 a*g16 DeleteMolecules
	miRNA2(c!1).ceRNA7(m!1) -> 0 a*g17 DeleteMolecules
	miRNA2(c!1).ceRNA8(m!1) -> 0 a*g18 DeleteMolecules
	miRNA2(c!1).ceRNA9(m!1) -> 0 a*g19 DeleteMolecules
	miRNA2(c!1).ceRNA10(m!1) -> 0 a*g20 DeleteMolecules
	
	# miRNA3 complexes, full degradation
	miRNA3(c!1).ceRNA1(m!1) -> 0 a*g21 DeleteMolecules
	miRNA3(c!1).ceRNA2(m!1) -> 0 a*g22 DeleteMolecules
	miRNA3(c!1).ceRNA3(m!1) -> 0 a*g23 DeleteMolecules
	miRNA3(c!1).ceRNA4(m!1) -> 0 a*g24 DeleteMolecules
	miRNA3(c!1).ceRNA5(m!1) -> 0 a*g25 DeleteMolecules
	miRNA3(c!1).ceRNA6(m!1) -> 0 a*g26 DeleteMolecules
	miRNA3(c!1).ceRNA7(m!1) -> 0 a*g27 DeleteMolecules
	miRNA3(c!1).ceRNA8(m!1) -> 0 a*g28 DeleteMolecules
	miRNA3(c!1).ceRNA9(m!1) -> 0 a*g29 DeleteMolecules
	miRNA3(c!1).ceRNA10(m!1) -> 0 a*g30 DeleteMolecules
	
	# miRNA4 complexes, full degradation
	miRNA4(c!1).ceRNA1(m!1) -> 0 a*g31 DeleteMolecules
	miRNA4(c!1).ceRNA2(m!1) -> 0 a*g32 DeleteMolecules
	miRNA4(c!1).ceRNA3(m!1) -> 0 a*g33 DeleteMolecules
	miRNA4(c!1).ceRNA4(m!1) -> 0 a*g34 DeleteMolecules
	miRNA4(c!1).ceRNA5(m!1) -> 0 a*g35 DeleteMolecules
	miRNA4(c!1).ceRNA6(m!1) -> 0 a*g36 DeleteMolecules
	miRNA4(c!1).ceRNA7(m!1) -> 0 a*g37 DeleteMolecules
	miRNA4(c!1).ceRNA8(m!1) -> 0 a*g38 DeleteMolecules
	miRNA4(c!1).ceRNA9(m!1) -> 0 a*g39 DeleteMolecules
	miRNA4(c!1).ceRNA10(m!1) -> 0 a*g40 DeleteMolecules
	
	# miRNA5 complexes, full degradation
	miRNA5(c!1).ceRNA1(m!1) -> 0 a*g41 DeleteMolecules
	miRNA5(c!1).ceRNA2(m!1) -> 0 a*g42 DeleteMolecules
	miRNA5(c!1).ceRNA3(m!1) -> 0 a*g43 DeleteMolecules
	miRNA5(c!1).ceRNA4(m!1) -> 0 a*g44 DeleteMolecules
	miRNA5(c!1).ceRNA5(m!1) -> 0 a*g45 DeleteMolecules
	miRNA5(c!1).ceRNA6(m!1) -> 0 a*g46 DeleteMolecules
	miRNA5(c!1).ceRNA7(m!1) -> 0 a*g47 DeleteMolecules
	miRNA5(c!1).ceRNA8(m!1) -> 0 a*g48 DeleteMolecules
	miRNA5(c!1).ceRNA9(m!1) -> 0 a*g49 DeleteMolecules
	miRNA5(c!1).ceRNA10(m!1) -> 0 a*g50 DeleteMolecules
	
	# miRNA6 complexes, full degradation
	miRNA6(c!1).ceRNA1(m!1) -> 0 a*g51 DeleteMolecules
	miRNA6(c!1).ceRNA2(m!1) -> 0 a*g52 DeleteMolecules
	miRNA6(c!1).ceRNA3(m!1) -> 0 a*g53 DeleteMolecules
	miRNA6(c!1).ceRNA4(m!1) -> 0 a*g54 DeleteMolecules
	miRNA6(c!1).ceRNA5(m!1) -> 0 a*g55 DeleteMolecules
	miRNA6(c!1).ceRNA6(m!1) -> 0 a*g56 DeleteMolecules
	miRNA6(c!1).ceRNA7(m!1) -> 0 a*g57 DeleteMolecules
	miRNA6(c!1).ceRNA8(m!1) -> 0 a*g58 DeleteMolecules
	miRNA6(c!1).ceRNA9(m!1) -> 0 a*g59 DeleteMolecules
	miRNA6(c!1).ceRNA10(m!1) -> 0 a*g60 DeleteMolecules
	
	# miRNA7 complexes, full degradation
	miRNA7(c!1).ceRNA1(m!1) -> 0 a*g61 DeleteMolecules
	miRNA7(c!1).ceRNA2(m!1) -> 0 a*g62 DeleteMolecules
	miRNA7(c!1).ceRNA3(m!1) -> 0 a*g63 DeleteMolecules
	miRNA7(c!1).ceRNA4(m!1) -> 0 a*g64 DeleteMolecules
	miRNA7(c!1).ceRNA5(m!1) -> 0 a*g65 DeleteMolecules
	miRNA7(c!1).ceRNA6(m!1) -> 0 a*g66 DeleteMolecules
	miRNA7(c!1).ceRNA7(m!1) -> 0 a*g67 DeleteMolecules
	miRNA7(c!1).ceRNA8(m!1) -> 0 a*g68 DeleteMolecules
	miRNA7(c!1).ceRNA9(m!1) -> 0 a*g69 DeleteMolecules
	miRNA7(c!1).ceRNA10(m!1) -> 0 a*g70 DeleteMolecules
	
	# miRNA8 complexes, full degradation
	miRNA8(c!1).ceRNA1(m!1) -> 0 a*g71 DeleteMolecules
	miRNA8(c!1).ceRNA2(m!1) -> 0 a*g72 DeleteMolecules
	miRNA8(c!1).ceRNA3(m!1) -> 0 a*g73 DeleteMolecules
	miRNA8(c!1).ceRNA4(m!1) -> 0 a*g74 DeleteMolecules
	miRNA8(c!1).ceRNA5(m!1) -> 0 a*g75 DeleteMolecules
	miRNA8(c!1).ceRNA6(m!1) -> 0 a*g76 DeleteMolecules
	miRNA8(c!1).ceRNA7(m!1) -> 0 a*g77 DeleteMolecules
	miRNA8(c!1).ceRNA8(m!1) -> 0 a*g78 DeleteMolecules
	miRNA8(c!1).ceRNA9(m!1) -> 0 a*g79 DeleteMolecules
	miRNA8(c!1).ceRNA10(m!1) -> 0 a*g80 DeleteMolecules
	
	# miRNA9 complexes, full degradation
	miRNA9(c!1).ceRNA1(m!1) -> 0 a*g81 DeleteMolecules
	miRNA9(c!1).ceRNA2(m!1) -> 0 a*g82 DeleteMolecules
	miRNA9(c!1).ceRNA3(m!1) -> 0 a*g83 DeleteMolecules
	miRNA9(c!1).ceRNA4(m!1) -> 0 a*g84 DeleteMolecules
	miRNA9(c!1).ceRNA5(m!1) -> 0 a*g85 DeleteMolecules
	miRNA9(c!1).ceRNA6(m!1) -> 0 a*g86 DeleteMolecules
	miRNA9(c!1).ceRNA7(m!1) -> 0 a*g87 DeleteMolecules
	miRNA9(c!1).ceRNA8(m!1) -> 0 a*g88 DeleteMolecules
	miRNA9(c!1).ceRNA9(m!1) -> 0 a*g89 DeleteMolecules
	miRNA9(c!1).ceRNA10(m!1) -> 0 a*g90 DeleteMolecules
	
	# miRNA10 complexes, full degradation
	miRNA10(c!1).ceRNA1(m!1) -> 0 a*g91 DeleteMolecules
	miRNA10(c!1).ceRNA2(m!1) -> 0 a*g92 DeleteMolecules
	miRNA10(c!1).ceRNA3(m!1) -> 0 a*g93 DeleteMolecules
	miRNA10(c!1).ceRNA4(m!1) -> 0 a*g94 DeleteMolecules
	miRNA10(c!1).ceRNA5(m!1) -> 0 a*g95 DeleteMolecules
	miRNA10(c!1).ceRNA6(m!1) -> 0 a*g96 DeleteMolecules
	miRNA10(c!1).ceRNA7(m!1) -> 0 a*g97 DeleteMolecules
	miRNA10(c!1).ceRNA8(m!1) -> 0 a*g98 DeleteMolecules
	miRNA10(c!1).ceRNA9(m!1) -> 0 a*g99 DeleteMolecules
	miRNA10(c!1).ceRNA10(m!1) -> 0 a*g100 DeleteMolecules
	
	# miRNA1 complexes, partial degradation
	miRNA1(c!1).ceRNA1(m!1) -> miRNA1(c) (1-a)*g1 DeleteMolecules
	miRNA1(c!1).ceRNA2(m!1) -> miRNA1(c) (1-a)*g2 DeleteMolecules
	miRNA1(c!1).ceRNA3(m!1) -> miRNA1(c) (1-a)*g3 DeleteMolecules
	miRNA1(c!1).ceRNA4(m!1) -> miRNA1(c) (1-a)*g4 DeleteMolecules
	miRNA1(c!1).ceRNA5(m!1) -> miRNA1(c) (1-a)*g5 DeleteMolecules
	miRNA1(c!1).ceRNA6(m!1) -> miRNA1(c) (1-a)*g6 DeleteMolecules
	miRNA1(c!1).ceRNA7(m!1) -> miRNA1(c) (1-a)*g7 DeleteMolecules
	miRNA1(c!1).ceRNA8(m!1) -> miRNA1(c) (1-a)*g8 DeleteMolecules
	miRNA1(c!1).ceRNA9(m!1) -> miRNA1(c) (1-a)*g9 DeleteMolecules
	miRNA1(c!1).ceRNA10(m!1) -> miRNA1(c) (1-a)*g10 DeleteMolecules
	
	# miRNA2 complexes, partial degradation
	miRNA2(c!1).ceRNA1(m!1) -> miRNA2(c) (1-a)*g11 DeleteMolecules
	miRNA2(c!1).ceRNA2(m!1) -> miRNA2(c) (1-a)*g12 DeleteMolecules
	miRNA2(c!1).ceRNA3(m!1) -> miRNA2(c) (1-a)*g13 DeleteMolecules
	miRNA2(c!1).ceRNA4(m!1) -> miRNA2(c) (1-a)*g14 DeleteMolecules
	miRNA2(c!1).ceRNA5(m!1) -> miRNA2(c) (1-a)*g15 DeleteMolecules
	miRNA2(c!1).ceRNA6(m!1) -> miRNA2(c) (1-a)*g16 DeleteMolecules
	miRNA2(c!1).ceRNA7(m!1) -> miRNA2(c) (1-a)*g17 DeleteMolecules
	miRNA2(c!1).ceRNA8(m!1) -> miRNA2(c) (1-a)*g18 DeleteMolecules
	miRNA2(c!1).ceRNA9(m!1) -> miRNA2(c) (1-a)*g19 DeleteMolecules
	miRNA2(c!1).ceRNA10(m!1) -> miRNA2(c) (1-a)*g20 DeleteMolecules
	
	# miRNA3 complexes, partial degradation
	miRNA3(c!1).ceRNA1(m!1) -> miRNA3(c) (1-a)*g21 DeleteMolecules
	miRNA3(c!1).ceRNA2(m!1) -> miRNA3(c) (1-a)*g22 DeleteMolecules
	miRNA3(c!1).ceRNA3(m!1) -> miRNA3(c) (1-a)*g23 DeleteMolecules
	miRNA3(c!1).ceRNA4(m!1) -> miRNA3(c) (1-a)*g24 DeleteMolecules
	miRNA3(c!1).ceRNA5(m!1) -> miRNA3(c) (1-a)*g25 DeleteMolecules
	miRNA3(c!1).ceRNA6(m!1) -> miRNA3(c) (1-a)*g26 DeleteMolecules
	miRNA3(c!1).ceRNA7(m!1) -> miRNA3(c) (1-a)*g27 DeleteMolecules
	miRNA3(c!1).ceRNA8(m!1) -> miRNA3(c) (1-a)*g28 DeleteMolecules
	miRNA3(c!1).ceRNA9(m!1) -> miRNA3(c) (1-a)*g29 DeleteMolecules
	miRNA3(c!1).ceRNA10(m!1) -> miRNA3(c) (1-a)*g30 DeleteMolecules
	
	# miRNA4 complexes, partial degradation
	miRNA4(c!1).ceRNA1(m!1) -> miRNA4(c) (1-a)*g31 DeleteMolecules
	miRNA4(c!1).ceRNA2(m!1) -> miRNA4(c) (1-a)*g32 DeleteMolecules
	miRNA4(c!1).ceRNA3(m!1) -> miRNA4(c) (1-a)*g33 DeleteMolecules
	miRNA4(c!1).ceRNA4(m!1) -> miRNA4(c) (1-a)*g34 DeleteMolecules
	miRNA4(c!1).ceRNA5(m!1) -> miRNA4(c) (1-a)*g35 DeleteMolecules
	miRNA4(c!1).ceRNA6(m!1) -> miRNA4(c) (1-a)*g36 DeleteMolecules
	miRNA4(c!1).ceRNA7(m!1) -> miRNA4(c) (1-a)*g37 DeleteMolecules
	miRNA4(c!1).ceRNA8(m!1) -> miRNA4(c) (1-a)*g38 DeleteMolecules
	miRNA4(c!1).ceRNA9(m!1) -> miRNA4(c) (1-a)*g39 DeleteMolecules
	miRNA4(c!1).ceRNA10(m!1) -> miRNA4(c) (1-a)*g40 DeleteMolecules
	
	# miRNA5 complexes, partial degradation
	miRNA5(c!1).ceRNA1(m!1) -> miRNA5(c) (1-a)*g41 DeleteMolecules
	miRNA5(c!1).ceRNA2(m!1) -> miRNA5(c) (1-a)*g42 DeleteMolecules
	miRNA5(c!1).ceRNA3(m!1) -> miRNA5(c) (1-a)*g43 DeleteMolecules
	miRNA5(c!1).ceRNA4(m!1) -> miRNA5(c) (1-a)*g44 DeleteMolecules
	miRNA5(c!1).ceRNA5(m!1) -> miRNA5(c) (1-a)*g45 DeleteMolecules
	miRNA5(c!1).ceRNA6(m!1) -> miRNA5(c) (1-a)*g46 DeleteMolecules
	miRNA5(c!1).ceRNA7(m!1) -> miRNA5(c) (1-a)*g47 DeleteMolecules
	miRNA5(c!1).ceRNA8(m!1) -> miRNA5(c) (1-a)*g48 DeleteMolecules
	miRNA5(c!1).ceRNA9(m!1) -> miRNA5(c) (1-a)*g49 DeleteMolecules
	miRNA5(c!1).ceRNA10(m!1) -> miRNA5(c) (1-a)*g50 DeleteMolecules
	
	# miRNA6 complexes, partial degradation
	miRNA6(c!1).ceRNA1(m!1) -> miRNA6(c) (1-a)*g51 DeleteMolecules
	miRNA6(c!1).ceRNA2(m!1) -> miRNA6(c) (1-a)*g52 DeleteMolecules
	miRNA6(c!1).ceRNA3(m!1) -> miRNA6(c) (1-a)*g53 DeleteMolecules
	miRNA6(c!1).ceRNA4(m!1) -> miRNA6(c) (1-a)*g54 DeleteMolecules
	miRNA6(c!1).ceRNA5(m!1) -> miRNA6(c) (1-a)*g55 DeleteMolecules
	miRNA6(c!1).ceRNA6(m!1) -> miRNA6(c) (1-a)*g56 DeleteMolecules
	miRNA6(c!1).ceRNA7(m!1) -> miRNA6(c) (1-a)*g57 DeleteMolecules
	miRNA6(c!1).ceRNA8(m!1) -> miRNA6(c) (1-a)*g58 DeleteMolecules
	miRNA6(c!1).ceRNA9(m!1) -> miRNA6(c) (1-a)*g59 DeleteMolecules
	miRNA6(c!1).ceRNA10(m!1) -> miRNA6(c) (1-a)*g60 DeleteMolecules
	
	# miRNA7 complexes, partial degradation
	miRNA7(c!1).ceRNA1(m!1) -> miRNA7(c) (1-a)*g61 DeleteMolecules
	miRNA7(c!1).ceRNA2(m!1) -> miRNA7(c) (1-a)*g62 DeleteMolecules
	miRNA7(c!1).ceRNA3(m!1) -> miRNA7(c) (1-a)*g63 DeleteMolecules
	miRNA7(c!1).ceRNA4(m!1) -> miRNA7(c) (1-a)*g64 DeleteMolecules
	miRNA7(c!1).ceRNA5(m!1) -> miRNA7(c) (1-a)*g65 DeleteMolecules
	miRNA7(c!1).ceRNA6(m!1) -> miRNA7(c) (1-a)*g66 DeleteMolecules
	miRNA7(c!1).ceRNA7(m!1) -> miRNA7(c) (1-a)*g67 DeleteMolecules
	miRNA7(c!1).ceRNA8(m!1) -> miRNA7(c) (1-a)*g68 DeleteMolecules
	miRNA7(c!1).ceRNA9(m!1) -> miRNA7(c) (1-a)*g69 DeleteMolecules
	miRNA7(c!1).ceRNA10(m!1) -> miRNA7(c) (1-a)*g70 DeleteMolecules
	
	# miRNA8 complexes, partial degradation
	miRNA8(c!1).ceRNA1(m!1) -> miRNA8(c) (1-a)*g71 DeleteMolecules
	miRNA8(c!1).ceRNA2(m!1) -> miRNA8(c) (1-a)*g72 DeleteMolecules
	miRNA8(c!1).ceRNA3(m!1) -> miRNA8(c) (1-a)*g73 DeleteMolecules
	miRNA8(c!1).ceRNA4(m!1) -> miRNA8(c) (1-a)*g74 DeleteMolecules
	miRNA8(c!1).ceRNA5(m!1) -> miRNA8(c) (1-a)*g75 DeleteMolecules
	miRNA8(c!1).ceRNA6(m!1) -> miRNA8(c) (1-a)*g76 DeleteMolecules
	miRNA8(c!1).ceRNA7(m!1) -> miRNA8(c) (1-a)*g77 DeleteMolecules
	miRNA8(c!1).ceRNA8(m!1) -> miRNA8(c) (1-a)*g78 DeleteMolecules
	miRNA8(c!1).ceRNA9(m!1) -> miRNA8(c) (1-a)*g79 DeleteMolecules
	miRNA8(c!1).ceRNA10(m!1) -> miRNA8(c) (1-a)*g80 DeleteMolecules
	
	# miRNA9 complexes, partial degradation
	miRNA9(c!1).ceRNA1(m!1) -> miRNA9(c) (1-a)*g81 DeleteMolecules
	miRNA9(c!1).ceRNA2(m!1) -> miRNA9(c) (1-a)*g82 DeleteMolecules
	miRNA9(c!1).ceRNA3(m!1) -> miRNA9(c) (1-a)*g83 DeleteMolecules
	miRNA9(c!1).ceRNA4(m!1) -> miRNA9(c) (1-a)*g84 DeleteMolecules
	miRNA9(c!1).ceRNA5(m!1) -> miRNA9(c) (1-a)*g85 DeleteMolecules
	miRNA9(c!1).ceRNA6(m!1) -> miRNA9(c) (1-a)*g86 DeleteMolecules
	miRNA9(c!1).ceRNA7(m!1) -> miRNA9(c) (1-a)*g87 DeleteMolecules
	miRNA9(c!1).ceRNA8(m!1) -> miRNA9(c) (1-a)*g88 DeleteMolecules
	miRNA9(c!1).ceRNA9(m!1) -> miRNA9(c) (1-a)*g89 DeleteMolecules
	miRNA9(c!1).ceRNA10(m!1) -> miRNA9(c) (1-a)*g90 DeleteMolecules
	
	# miRNA10 complexes, partial degradation
	miRNA10(c!1).ceRNA1(m!1) -> miRNA10(c) (1-a)*g91 DeleteMolecules
	miRNA10(c!1).ceRNA2(m!1) -> miRNA10(c) (1-a)*g92 DeleteMolecules
	miRNA10(c!1).ceRNA3(m!1) -> miRNA10(c) (1-a)*g93 DeleteMolecules
	miRNA10(c!1).ceRNA4(m!1) -> miRNA10(c) (1-a)*g94 DeleteMolecules
	miRNA10(c!1).ceRNA5(m!1) -> miRNA10(c) (1-a)*g95 DeleteMolecules
	miRNA10(c!1).ceRNA6(m!1) -> miRNA10(c) (1-a)*g96 DeleteMolecules
	miRNA10(c!1).ceRNA7(m!1) -> miRNA10(c) (1-a)*g97 DeleteMolecules
	miRNA10(c!1).ceRNA8(m!1) -> miRNA10(c) (1-a)*g98 DeleteMolecules
	miRNA10(c!1).ceRNA9(m!1) -> miRNA10(c) (1-a)*g99 DeleteMolecules
	miRNA10(c!1).ceRNA10(m!1) -> miRNA10(c) (1-a)*g100 DeleteMolecules
end reaction rules

end model

### Actions ###
# construct reaction network
generate_network({overwrite=>1})

# Equilibration..
simulate({method=>"ode",suffix=>"ode",t_end=>20000,n_steps=>20000})
#simulate({method=>"ssa",suffix=>"ssa",t_end=>200000,n_steps=>20000})

# simulation
# pre stimulus interval 
#simulate_ode({suffix=>"sim",t_end=>1800,n_steps=>1800})